

/*
Copyright (c) 2015 EPFL-BBP, All rights reserved.

THIS SOFTWARE IS PROVIDED BY THE BLUE BRAIN PROJECT ``AS IS''
AND ANY EXPRESS OR IMPLIED WARRANTIES, INCLUDING, BUT NOT LIMITED TO,
THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A PARTICULAR
PURPOSE ARE DISCLAIMED. IN NO EVENT SHALL THE BLUE BRAIN PROJECT
BE LIABLE FOR ANY DIRECT, INDIRECT, INCIDENTAL, SPECIAL, EXEMPLARY, OR
CONSEQUENTIAL DAMAGES (INCLUDING, BUT NOT LIMITED TO, PROCUREMENT OF
SUBSTITUTE GOODS OR SERVICES; LOSS OF USE, DATA, OR PROFITS; OR
BUSINESS INTERRUPTION) HOWEVER CAUSED AND ON ANY THEORY OF LIABILITY,
WHETHER IN CONTRACT, STRICT LIABILITY, OR TORT (INCLUDING NEGLIGENCE
OR OTHERWISE) ARISING IN ANY WAY OUT OF THE USE OF THIS SOFTWARE, EVEN
IF ADVISED OF THE POSSIBILITY OF SUCH DAMAGE.

This work is licensed under a
Creative Commons Attribution-NonCommercial-ShareAlike 4.0 International License.
To view a copy of this license, visit
http://creativecommons.org/licenses/by-nc-sa/4.0/legalcode or send a letter to
Creative Commons,
171 Second Street, Suite 300,
San Francisco, California, 94105, USA.
*/

/*
 * @file biophys.hoc
 * @brief Biophysics
 * @author Etay Hay, Werner Van Geit @ BBP
 * @date 2015
*/
begintemplate cADpyr230_biophys
public biophys, distribute

proc distribute(){local x localobj sl
        strdef stmp,distfunc,mech
        sl = $o1
        mech = $s2
        distfunc = $s3
        sprint(distfunc,"%%s %s(%%f) = %s",mech, distfunc)
        forsec sl for(x) {
            sprint (stmp,distfunc,secname(),x,distance(x))
            execute(stmp)
        }
    }

proc biophys() {

	forsec $o1.all {
		insert pas
	}

	forsec $o1.all {
		e_pas = -75 
	}

	forsec $o1.all {
		Ra = 100 
	}

	forsec $o1.all {
		cm = 1 
	}

	forsec $o1.all {
		g_pas = 3e-5 
	}

	forsec $o1.apical {
		cm = 2 
	}

	forsec $o1.basal {
		cm = 2 
	}

}

endtemplate cADpyr230_biophys
